
// SELECT YOUR PARAMETERS. Please change this part to your input and output directories and desired contact sheet file name

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep1_220927_Control_0uM_Nocodazole_wNT002";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep1_220927_Control_0uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep2_231112_Control_0uM_Nocodazole_wNT002"
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep2_231112_Control_0uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep3_231114_Control_0uM_Nocodazole_wNT002"
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Control_0uM_Nocodazole/Rep3_231114_Control_0uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep1_220914_Test_150uM_Nocodazole_wNT002";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep1_220914_Test_150uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep2_230210_Test_150uM_Nocodazole_wNT002";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep2_230210_Test_150uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep3_231112_Test_150uM_Nocodazole_wNT002";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep3_231112_Test_150uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep4_231114_Test_150uM_Nocodazole_wNT002";
//'outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/1_NT002_TBB2GFP/Test_150uM_Nocodazole/Rep4_231114_Test_150uM_Nocodazole_wNT002/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep1_231104_Control_0uM_Nocodazole_LP007";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep1_231104_Control_0uM_Nocodazole_LP007/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep2_231107_Control_0uM_Nocodazole_LP007";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep2_231107_Control_0uM_Nocodazole_LP007/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep3_231112_Control_0uM_Nocodazole_LP007";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Control_0uM_Nocodazole/Rep3_231112_Control_0uM_Nocodazole_LP007/output";

inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Test_150uM_Nocodazole/Rep1_231104_Test_150uM_Nocodazole_LP007";
outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Test_150uM_Nocodazole/Rep1_231104_Test_150uM_Nocodazole_LP007/output";

//inputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Test_150uM_Nocodazole/Rep2_231107_Test_150uM_Nocodazole_LP007";
//outputDir="/Volumes/NESS/260216_Naly_drugTreatments/260311_Nocodazole_drug_treatments_merged/2_LP007_ERM1GFP/Test_150uM_Nocodazole/Rep2_231107_Test_150uM_Nocodazole_LP007/output";

// Note - the 1st rep of the test wLP007 sample did not have D3D files


//////////////////////////////////////////////////////////

// Create the output directory
File.makeDirectory(outputDir);

// set the working directory
File.setDefaultDir(inputDir);

// print the input directory
print(inputDir);

// get the list of files in this directory
fileList = getFileList(inputDir);

// restrict list to R3D_D3D.dv files
dv_array = newArray(0);

// Save .dv files in a dv_array:
for (i=0; i<fileList.length; i++) {
    if(endsWith(fileList[i], "R3D.dv"))
    {
    	dv_array = Array.concat(dv_array, fileList[i]);
    }
}

//print the files;
print("\nWill process the following DV files:");
for (i=0; i<dv_array.length; i++) {
    print("\t" + dv_array[i]);
}


// cycle through the images in the directory
for (i=0; i<dv_array.length; i++) {
    full_dv = inputDir + "/" + dv_array[i];
    
    // Report 
    print("\nNow processing file:\t" + dv_array[i]);
    
    open(dv_array[i]);
    
    //select the first image
    selectWindow(dv_array[i]);
    
    // set the zoom
    run("Set... ", "zoom=75 x=512 y=512");
    
    // adjust the contrast
	run("Enhance Contrast", "saturated=0.35");
	run("Enhance Contrast", "saturated=0.35");
	run("Enhance Contrast", "saturated=0.35");
	
	// z project
	run("Z Project...", "start=1 stop=25 projection=[Max Intensity]");
	
	// split channels
    run("Split Channels");
    
    // get channel names
    c1title = "C1-MAX_" + dv_array[i];
    c2title = "C2-MAX_" + dv_array[i];
    c3title = "C3-MAX_" + dv_array[i];
    c4title = "C4-MAX_" + dv_array[i];
    
    // set the green channel - c2
    selectWindow(c2title);
    setMinAndMax(385, 5524); 
    
    // set the blue channel - c4
    selectWindow(c3title);
    setMinAndMax(625, 6755);   
    
    // set the magenta channel - c1
    selectWindow(c1title);
    setMinAndMax(2583, 9935);       
    
    run("Merge Channels...", "c2=[" + c2title + "] c3=[" + c4title + "] c6=[" + c1title + "] create");
    
    // set the zoom
    run("Set... ", "zoom=75 x=512 y=512");
    
    // save image
    rootname = File.getNameWithoutExtension(dv_array[i]);
    print(rootname);
    
    
    // Save the .tif output
    tiffoutput = outputDir + "/" + rootname + ".tif";
    print(tiffoutput);
    saveAs("Tiff", tiffoutput);
    
    // Save the .jpg output
    jpgoutput = outputDir + "/" + rootname + ".jpg";
    print(jpgoutput);
    saveAs("jpeg", jpgoutput);    
   
    // close file
    close(dv_array[i]);
    
    //saveAs("Tiff", "MAX_image_7_R3D.tif");
	//saveAs("Jpeg", "/Volumes/NESS/260205_Ambika_Stress/251101_wLPW019_O2stress/stress_test/MAX_image_7_R3D.jpg");
    
}

// run the script makeContactSheet.sh to create the total contact sheet - this doesn't work yet
// Usage: bash makeContactSheet.sh <contactsheetname.jpg>
//File.setDefaultDir(outputDir);
//exec("/Volumes/NESS/260206_macroBuilding/makeContactSheet.sh", contactsheetname);
